## Steps to generate the bifurcation curves shown in Figure 4:
## 1) Load this .ode file into XPPAUT and 
## 2) Set gtonic to 0.3 for panel A, 0.12 for panel B, 0.22 for panel C, and 0.18 for panel D
## 3) Keystrokes to run simulation and compute bifurcation curve: (i)(g)(i)(l)(f)(a)(r)(s)
## 4) Keystrokes to save the data: (f)(w), and then click on Ok 
#
# Modified 2025-07-03 by HDH from generate_figure4_bifurcation_curves_two_cells.ode 
# to have n cells connected by synapses. 

# Try using i as the bifurcation parameter?

par i=0

# BRS model fast subsystem with h as bifurcation parameter
#par h=-2
par h=.3

# Set gtonic as described above for accordingly for panels A-D
#par gtonic=0.3 
#par gtonic=0.1247
#par gtonic=0.2194
#par gtonic=0.1806
par gtonic=0.4

# parameters
#par i=0,c=21,etonic=0
#par i=20,c=21,etonic=0
par c=21,etonic=0
par gl=2.8,el=-65
par gna=28,ena=50
par gk=11.2,ek=-85
par gnap=2.8

# gating functions
xinf(v,vt,sig)=1/(1+exp((v-vt)/sig))
taux(v,vt,sig,tau)=tau/cosh((v-vt)/(2*sig))

# persistent sodium
pinf(v)=xinf(v,-40,-6)
inap(v,h)=gnap*pinf(v)*h*(v-ena)

# transient sodium 
minf(v)=xinf(v,-34,-5)
ina(v,n)=gna*minf(v)^3*(1-n)*(v-ena)

# potassium
ninf(v)=xinf(v,-29,-4)
taun(v)=taux(v,-29,-4,10)
ik(v,n)=gk*n^4*(v-ek)

# leak
il(v)=gl*(v-el)

# tonic
itonic(v)=gtonic*(v-etonic)

# differential equations
v[1..2]' = (i-il(v[j])-ina(v[j],n[j])-ik(v[j],n[j])-inap(v[j],h)-itonic(v[j])-isyn[j])/c
n[1..2]'=(ninf(v[j])-n[j])/taun(v[j])

# synapses
#p gsyn=0.1,esyn=0,k_r=1,theta_s=-10,sigma_s=-5,tau_s=5
p gsyn=1,esyn=0,k_r=1,theta_s=-10,sigma_s=-5,tau_s=5
sinf(v)=1/(1+exp((v-theta_s)/sigma_s))
isyn[1]=gsyn*(s2)*(v1-esyn)
isyn[2]=gsyn*(s1)*(v2-esyn)
#isyn3=gsyn*(s1+s2+s4)*(v3-esyn)
#isyn4=gsyn*(s1+s2+s3)*(v4-esyn)
#isyn5=gsyn*(s1+s2+s3+s4+s6)*(v5-esyn)
#isyn6=gsyn*(s1+s2+s3+s4+s5)*(v6-esyn)
#isyn7=gsyn*(s1+s2+s3+s4+s5+s6)*(v7-esyn)

# Note s1 is the synaptic activation for all the synapses from 1->x for x not=1 #
s[1..2]'=((1-s[j])*sinf(v[j]) - k_r*s[j])/tau_s

init v[1..2]=-60

# XPP settings
@ total=40000,dt=.1,meth=cvode,maxstor=10000000
@ tol=1e-8,atol=1e-8
@ xlo=0,xhi=40000,ylo=-80,yhi=20

# AUTO settings
#@ parmin=-100,parmax=100,autoxmin=-2,autoxmax=2,autoymin=-80,autoymax=20
#@ parmin=-100,parmax=100,autoxmin=-2,autoxmax=4,autoymin=-80,autoymax=20
#@ parmin=0,parmax=4,autoxmin=0,autoxmax=4,autoymin=-80,autoymax=20
@ parmin=0,parmax=20,autoxmin=0,autoxmax=20,autoymin=-80,autoymax=20
@ dsmin=1e-4,dsmax=.1,nmax=500

done

